PsychoPy2experiment version="1.79.01"
Settings
  Monitor = testMonitor
  color = $[-1,-1, -1]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = patternMoving4
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    CodeComponent code
      Begin Experiment:
        #Parameters to use along the experiment
        #Constants
        RAD=0.9
        CTE_ANGLE=180       #Used to set the starting point of the stimulus in the screen
        ANGLES= [0, 45, 90] #Angles for the stimulus
        SIZE= len(ANGLES)   #Num. of angles used (valid for trial loop counter)
        COUNTER_LOOP= 5     #Num. of repeats for each stimulus movement loop
        STEP= 0.01          #Velocity of the stimulus
        #Variables
        index= 0            #Index for the ANGLES list
        position_ptrn=[0,0] #Position of the stimulus
      Begin Routine:
        angle= ANGLES[index]            #Used to find initial position & inclination angle of stimulus
        stimulus_angle= CTE_ANGLE-angle #Angle assigned to the stimulus
      End Routine:
        index+=1
  Routine left_to_right
    CodeComponent code_2
      Each Frame:
        #Update the stimulus position in the screen
        position_ptrn[0]+= speed_x
        position_ptrn[1]+= speed_y
      Begin Routine:
        #Calculate the initial positions of the stimulus
        x= RAD*np.cos(np.deg2rad(CTE_ANGLE+angle))
        y= RAD*np.sin(np.deg2rad(CTE_ANGLE+angle))
        position_ptrn= [x,y]
        #Calculate the increment for x & y in function of stimulus angle
        if (angle == 0):
            speed_x= STEP
            speed_y= 0
        elif (angle == 90):
            speed_x= 0
            speed_y= STEP
        else:
            #Valid only for a stimulus angle of 45 degrees
            speed_x= STEP*np.tan(np.deg2rad(CTE_ANGLE+angle))
            speed_y= STEP*np.tan(np.deg2rad(CTE_ANGLE+angle))
    PolygonComponent polygon
      pos [set every frame] = position_ptrn
      startVal [time (s)] = 0.0
      size = [0.2, 4]
      fillColor = blue
      stopVal [duration (s)] = 3.5
      ori [set every repeat] = stimulus_angle
      lineColor = blue
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  Routine right_to_left
    CodeComponent code_3
      Each Frame:
        #Update the stimulus position in the screen
        position_ptrn[0]+= speed_x
        position_ptrn[1]+= speed_y
      Begin Routine:
        #Calculate the initial positions of the stimulus
        x= RAD*np.cos(np.deg2rad(2*CTE_ANGLE+angle))
        y= RAD*np.sin(np.deg2rad(2*CTE_ANGLE+angle))
        position_ptrn= [x,y]
        #Calculate the increment for x & y in function of stimulus angle
        if (angle == 0):
            speed_x= STEP*(-1)
            speed_y= 0
        elif (angle == 90):
            speed_x= 0
            speed_y= STEP*(-1)
        else:
            #Valid only for a stimulus angle of 45 degrees
            speed_x= STEP*np.tan(np.deg2rad(CTE_ANGLE-angle))
            speed_y= STEP*np.tan(np.deg2rad(CTE_ANGLE-angle))
    PolygonComponent polygon_2
      pos [set every frame] = position_ptrn
      startVal [time (s)] = 0.0
      size = [0.2, 3]
      fillColor = blue
      stopVal [duration (s)] = 3.5
      ori [set every repeat] = stimulus_angle
      lineColor = blue
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = SIZE
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    Routine trial
    LoopInitiator left_to_right_loop loopType="TrialHandler"
      loopType = random
      nReps = COUNTER_LOOP
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      Routine left_to_right
    LoopTerminator left_to_right_loop
    LoopInitiator right_to_left_loop loopType="TrialHandler"
      loopType = random
      nReps = COUNTER_LOOP
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      Routine right_to_left
    LoopTerminator right_to_left_loop
  LoopTerminator trials
